PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = SoundTaskDemo
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Routines
  Routine intro_routine
    TextComponent intro_slide
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Get ready to start the experiment…
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  Routine trial
    TextComponent press_key
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space when you hear a tone
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent tone
      sound = 440
      startVal [time (s)] = $sound_start
      stopVal [duration (s)] = 0.5
      volume = 0.5
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  Routine outro_routine
    TextComponent outro_slide
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks!
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Flow
  Routine intro_routine
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sound_start', 5)]),
      OrderedDict([('sound_start', 4)]),
      OrderedDict([('sound_start', 3)])]
    Routine trial
  LoopTerminator trials_loop
  Routine outro_routine
